PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = provastroopuntitled
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Routines
  Routine trial
    TextComponent target
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
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      text:
        Any text

        including line breaks
    KeyboardComponent response
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
